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Storage:Data%20Location:DataIOFilter string DataDirectory= ../data/scratch ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= AAA_DownFtERD18HzUpBH_20170710 Name % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 1 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 01 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
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Source:Signal%20Properties:SignalGeneratorADC int SourceCh= 68 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:SignalGeneratorADC int SampleBlockSize= 40 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:SignalGeneratorADC int SamplingRate= 1000 256Hz 1 % // sample rate
Source:SignalGeneratorADC list SourceChOffset= 68 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 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0 0 0 0 
Source:SignalGeneratorADC list SourceChGain= 68 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 0.0298023 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0.0298023 0.0298023 0.0298023 0.0298023 
Source:SignalGeneratorADC list ChannelNames= 0 
Source:SignalGeneratorADC int ModulateAmplitude= 0 0 0 1 // Modulate the amplitude with the mouse (0=no, 1=yes) (boolean)
Source:SignalGeneratorADC int SineChannelX= 0 0 0 % // Channel number of sinewave controlled by mouse x position
Source:SignalGeneratorADC int SineChannelY= 0 0 0 % // Channel number of sinewave controlled by mouse y position (0 for all)
Source:SignalGeneratorADC int SineChannelZ= 0 0 0 % // Channel number of sinewave controlled by mouse key state
Source:SignalGeneratorADC float SineFrequency= 10Hz 10Hz % % // Frequency of sine wave
Source:SignalGeneratorADC int SineAmplitude= 100muV 100muV % % // Amplitude of sine wave
Source:SignalGeneratorADC int NoiseAmplitude= 30muV 30muV % % // Amplitude of white noise (common to all channels)
Source:SignalGeneratorADC int DCOffset= 0muV 0muV % % // DC offset (common to all channels)
Source:SignalGeneratorADC string AmplitudeMultiplier= 1 1 % % // Expression to multiply amplitude by
Source:SignalGeneratorADC string OffsetMultiplier= % StimulusType % % // Expression to multiply offset by
Source:SignalGeneratorADC int SignalType= 0 0 0 2 // numeric type of output signal:  0: int16, 1: float32, 2: int32 (enumeration)
Source:SignalGeneratorADC matrix SourceProperties= 0 { Frequency Amplitude } // Source properties
Source:SignalGeneratorADC matrix MixingMatrix= 0 1 // Source-to-sensor projection, rows are sources, columns are sensors
Storage:BCI2000FileWriter string FileFormat= dat // format of data file (readonly)
Storage:Documentation:BCI2000FileWriter string StorageTime= Thu%20Oct%2024%2016:31:04%202013 // time of beginning of data storage
Source:Alignment:AlignmentFilter int AlignChannels= 0 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 15 25 26 17 27 36 29 30 31 21 40 28 19 27 29 38 // list of transmitted channels: Channel names may contain * and ? wildcards,  and character ranges enclosed in []; wildcard patterns may be negated by prepending an exclamation mark.  Ranges of channels may be specified using : or - to separate begin from end.
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Storage:Data%20Location:RunManager string DataFile= $%7bSubjectName%7d$%7bSubjectSession%7d/$%7bSubjectName%7dS$%7bSubjectSession%7dR$%7bSubjectRun%7d.$%7bFileFormat%7d // name of data file relative to DataDirectory
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 SignalGeneratorADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain (noedit)(readonly)
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Filtering:Windowing:WindowingFilter int WindowLength= 160ms 0.5s % % // Length of window
Filtering:Windowing:WindowingFilter int Detrend= 1 0 0 2 // Detrend data? 0: no, 1: mean, 2: linear (enumeration)
Filtering:Windowing:WindowingFilter int WindowFunction= 0 0 0 3 // Window function 0: Rectangular, 1: Hamming, 2: Hann, 3: Blackman (enumeration)
Filtering:Spectral%20Estimation:ARSpectrum float FirstBinCenter= 0Hz 0Hz % % // Center of first frequency bin (in Hz)
Filtering:Spectral%20Estimation:ARSpectrum float LastBinCenter= 30Hz 30Hz % % // Center of last frequency bin (in Hz)
Filtering:Spectral%20Estimation:ARSpectrum float BinWidth= 3Hz 3Hz % % // Width of spectral bins (in Hz)
Filtering:Spectral%20Estimation:ARSpectrum int OutputType= 0 0 0 2 // 0: Spectral Amplitude, 1: Spectral Power, 2: Coefficients (enumeration)
Filtering:AR%20Spectral%20Estimator:ARSpectrum int ModelOrder= 16 16 0 % // AR model order
Filtering:AR%20Spectral%20Estimator:ARSpectrum int EvaluationsPerBin= 15 15 1 % // Number of uniformly spaced evaluation points entering into a single bin value
Filtering:SpatialFilter int SpatialFilterType= 1 2 0 3 // spatial filter type 0: none, 1: full matrix, 2: sparse matrix, 3: common average reference (CAR) (enumeration)
Filtering:SpatialFilter:SpatialFilter matrix SpatialFilter= { C3 C4 Cz } 15 -.25 1 -.25 -.25 -.25 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 -.25 1 -.25 -.25 -.25 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 1 -.25 -.25 -.25 -.25 0 % % // columns represent input channels, rows represent output channels
Filtering:SpatialFilter:SpatialFilter intlist SpatialFilterCAROutput= 0 // when using CAR filter type: list of output channels, or empty for all channels
Filtering:SpatialFilter:SpatialFilter int SpatialFilterMissingChannels= 1 0 0 1 // how to handle missing channels 0: ignore, 1: report error (enumeration)
Filtering:LinearClassifier matrix Classifier= 5 { input%20channel input%20element%20(bin) Dimension Weight } C3 12Hz 1 -1 C4 12Hz 1 1 Cz 15Hz 2 -1 C3 12Hz 2 -0.5 C4 12Hz 2 -0.5 // Linear classification matrix in sparse representation
Filtering:LPFilter float LPTimeConstant= 50 16s 0 % // time constant for the low pass filter
Filtering:ExpressionFilter string StartRunExpression= % // expression executed on StartRun
Filtering:ExpressionFilter string StopRunExpression= % // expression executed on StopRun
Filtering:ExpressionFilter matrix Expressions= 0 1 // expressions used to compute the output of the ExpressionFilter (rows are channels; empty matrix for none)
Filtering:Normalizer floatlist NormalizerOffsets= 2 0 0 0 % % // normalizer offsets
Filtering:Normalizer floatlist NormalizerGains= 2 0.05 0.05 0 % % // normalizer gain values
Filtering:Normalizer intlist Adaptation= 2 2 2 0 0 2 // 0: no adaptation, 1: zero mean, 2: zero mean, unit variance (enumeration)
Filtering:Normalizer matrix BufferConditions= 2 2 (Feedback)&&(TargetCode==1) (Feedback)&&(TargetCode==3) (Feedback)&&(TargetCode==2) (Feedback)&&(TargetCode==4) // expressions corresponding to data buffers (columns correspond to output channels, multiple rows correspond to multiple buffers)
Filtering:Normalizer float BufferLength= 30s 9s % % // time window of past data per buffer that enters into statistic
Filtering:Normalizer string UpdateTrigger= (Feedback==0) // expression to trigger offset/gain update when changing from 0 (use empty string for continuous update)
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System:Configuration matrix SignalProcessingFilterChain= 6 { Filter%20Name Position%20String } SpatialFilter 2.B ARFilter 2.C LinearClassifier 2.D LPFilter 2.D1 ExpressionFilter 2.D2 Normalizer 2.E // SignalProcessing filter chain (noedit)(readonly)
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Application%20Window:ApplicationWindow int WindowWidth= 1920 640 0 % // width of Application window
Application:Application%20Window:ApplicationWindow int WindowHeight= 1200 480 0 % // height of Application window
Application:Application%20Window:ApplicationWindow int WindowLeft= -1920 0 % % // screen coordinate of Application window's left edge
Application:Application%20Window:ApplicationWindow int WindowTop= 0 0 % % // screen coordinate of Application window's top edge
Application:Application%20Window:ApplicationWindow string WindowBackgroundColor= 0x000000 0x505050 % % // Application window background color (color)
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Application:AudioPlayback:ApplicationWindow float AudioPlaybackRate= auto // audio playback sampling rate
Application:AudioPlayback:ApplicationWindow int AudioPlaybackChannels= auto // number of playback output channels
Application:AudioPlayback:ApplicationWindow float AudioPlaybackBufferDuration= auto // duration of playback buffer
Visualize:Application%20Log:ApplicationBase int ShowAppLog= 1 0 0 1 // Show application log window (boolean)
Application:Sequencing:FeedbackTask float PreRunDuration= 7s 2s 0 % // duration of pause preceding first trial
Application:Sequencing:FeedbackTask float PreFeedbackDuration= 2s 2s 0 % // duration of target display prior to feedback
Application:Sequencing:FeedbackTask float FeedbackDuration= 1.5s 3s 0 % // duration of feedback
Application:Sequencing:FeedbackTask float PostFeedbackDuration= 1s 1s 0 % // duration of result display after feedback
Application:Sequencing:FeedbackTask float ITIDuration= 1s 1s 0 % // duration of inter-trial interval
Application:Sequencing:FeedbackTask float MinRunLength= % 120s 0 % // minimum duration of a run; if blank, NumberOfTrials is used
Application:Sequencing:FeedbackTask int NumberOfTrials= 25 0 0 % // number of trials; if blank, MinRunLength is used
Application:Targets:FeedbackTask int NumberTargets= 4 2 0 255 // number of targets
Application:Targets:FeedbackTask intlist TargetSequence= 0 1 % % // fixed sequence in which targets should be presented (leave empty for random)
Application:Window:CursorFeedbackTask int RenderingQuality= 0 0 0 1 // rendering quality: 0: low, 1: high (enumeration)
Application:Sequencing:CursorFeedbackTask float MaxFeedbackDuration= 6s % 0 % // abort a trial after this amount of feedback time has expired
Application:3DEnvironment:CursorFeedbackTask floatlist CameraPos= 3 50 50 150 // camera position vector in percent coordinates of 3D area
Application:3DEnvironment:CursorFeedbackTask floatlist CameraAim= 3 50 50 50 // camera aim point in percent coordinates
Application:3DEnvironment:CursorFeedbackTask int CameraProjection= 0 0 0 2 // projection type: 0: flat, 1: wide angle perspective, 2: narrow angle perspective (enumeration)
Application:3DEnvironment:CursorFeedbackTask floatlist LightSourcePos= 3 50 50 150 // light source position in percent coordinates
Application:3DEnvironment:CursorFeedbackTask int LightSourceColor= 0xFFFFFF // light source RGB color (color)
Application:3DEnvironment:CursorFeedbackTask int WorkspaceBoundaryColor= 0x000000 0 % % // workspace boundary color (0xff000000 for invisible) (color)
Application:3DEnvironment:CursorFeedbackTask string WorkspaceBoundaryTexture= F:\Audrey\BCI2000\prog\images\black.bmp // path of workspace boundary texture (inputfile)
Application:Cursor:CursorFeedbackTask float CursorWidth= 10 10 0.0 % // feedback cursor width in percent of screen width
Application:Cursor:CursorFeedbackTask int CursorColorFront= 0xFF8080 // cursor color when it is at the front of the workspace (color)
Application:Cursor:CursorFeedbackTask int CursorColorBack= 0xFF8080 // cursor color when it is in the back of the workspace (color)
Application:Cursor:CursorFeedbackTask string CursorTexture= % // path of cursor texture (inputfile)
Application:Cursor:CursorFeedbackTask floatlist CursorPos= 3 50 50 50 // cursor starting position
Application:Targets:CursorFeedbackTask matrix Targets= 4 { pos%20x pos%20y pos%20z width%20x width%20y width%20z } 96 50 100 8 50 1 4 50 100 8 50 1 50 96 100 50 8 1 50 4 100 50 8 1 // target positions and widths in percentage coordinates
Application:Targets:CursorFeedbackTask int TargetColor= 0xFFFF00 // target color (color)
Application:Targets:CursorFeedbackTask string TargetTexture= % // path of target texture (inputfile)
Application:Targets:CursorFeedbackTask int TestAllTargets= 1 0 0 1 // test all targets for cursor collision? 0: test only the visible current target, 1: test all targets (enumeration)
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeStateName= % // State to be translated into keystrokes (0-F), empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpression= % // Expression that evaluates to a virtual keycode, empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpressionOnStartRun= % // Expression that initializes expression variables on StartRun
Connector:ConnectorOutput string ConnectorOutputAddress= localhost:55404 localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
Application:GazeMonitor:GazeMonitorFilter int VisualizeGazeMonitorFilter= 0 0 0 1 // Visualize the gaze data on the app visualization (boolean)
Application:GazeMonitor:GazeMonitorFilter int EnforceFixation= 0 0 0 1 // Enforce a fixation point on the screen (boolean)
Application:GazeMonitor:GazeMonitorFilter string FixationX= 0.5 0.5 % % // X coordinate of fixation center - 0.0 to 1.0 (expression)
Application:GazeMonitor:GazeMonitorFilter string FixationY= 0.5 0.5 % % // Y coordinate of fixation center - 0.0 to 1.0 (expression)
Application:GazeMonitor:GazeMonitorFilter int ShowFixationZone= 0 0 0 1 // Show the legal fixation zone with a ring (boolean)
Application:GazeMonitor:GazeMonitorFilter float BlinkTime= 100ms 100ms 0 % // Maximum allowed time for invalid eyes
Application:GazeMonitor:GazeMonitorFilter float SaccadeTime= 100ms 100ms 0 % // Maximum allowed time for violating the fixation
Application:GazeMonitor:GazeMonitorFilter float FixationRadius= 0.1 0.1 0.0 1.0 // Allowable distance from fixation center
Application:GazeMonitor:GazeMonitorFilter string FixationImage= % // Image to render at fixation (inputfile)
Application:GazeMonitor:GazeMonitorFilter string FixationViolationImage= % // Image to render at fixation when violated (inputfile)
Application:GazeMonitor:GazeMonitorFilter string FixationViolationSound= % // Sound to play when fixation violated (inputfile)
Application:GazeMonitor:GazeMonitorFilter float FixationImageSize= 0.04 0.04 0.01 1.0 // Size in percentage of screen height of the fixation image
Application:GazeMonitor:GazeMonitorFilter int LogGazeInformation= 0 0 0 1 // Add Eyetracker information to applog (boolean)
gSTIMbox:gSTIMbox:StimBoxFilter int EnableStimBoxFilter= 0 0 0 256 // Serial port number for the g.STIMbox.  If 0, StimBoxFilter is disabled
gSTIMbox:gSTIMbox:StimBoxFilter matrix DigitalOutputs= 0 { Expression } // Matrix of Expressions for digital outputs
ParallelPort:Output:ParallelPortFilter matrix ParallelPortOutput= 0 { Device%20Name Expression } // Matrix of Expressions for parallel port output
Application:Localization:Localization string Language= Default Default % % // Language for user messages
Application:Localization:Localization matrix LocalizedStrings= { German } { Timeout Be%20prepared%20... T } Inaktiv Achtung%20... T // Localized user messages
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System:Configuration matrix ApplicationFilterChain= 7 { Filter%20Name Position%20String } ConnectorInput 2.9999 CursorFeedbackTask 3 KeystrokeFilter 3.1 ConnectorOutput 3.9999 GazeMonitorFilter 3.A StimBoxFilter 3.A ParallelPortFilter 3.B // Application filter chain (noedit)(readonly)
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System:Randomization int RandomSeed= 22173 0 % % // seed for the BCI2000 pseudo random number generator (readonly)
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)
